<PlusConfiguration version="2.3" PlusRevision="Plus-2.5.0.12cc2515 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="Sonix C5 depth 10cm Probe Ref" Description="EM sensors plugged in from leftmost slot (Transducer 1): 1 Probe, 2 Reference" />
    <Device
      Id="TrackerDevice"
      Type="Ascension3DG"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0.0"
      FilterAcWideNotch="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="1" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="VideoDevice"
      Type="SonixVideo"
      UsImageOrientation="UF"
      AcquisitionRate="30"
      LocalTimeOffsetSec="0.0"
      IP="localhost"
      ImagingMode="BMode"
      AcquisitionDataType="BPost"
      Depth="100"
      SoundVelocity="1540">
      <DataSources>
        <DataSource
          Type="Video"
          Id="Video"
          PortName="B"
          PortUsImageOrientation="UF"
          BufferSize="500"
          AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mhd"
      EnableCapturing="FALSE"
      EnableCompression="FALSE"
      FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="10"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputDeviceId="TrackedVideoDevice"
    OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <CoordinateDefinitions>
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1	0	0	-410
        0	1	0	5
        0	0	1	0
        0	0	0	1"
       Date="2011.12.06 17:57:00" Error="0.0" />
    <Transform From="Image" To="Probe"
      Matrix="
        0.00454611	0.186799	-0.00209376	14.5556
        -0.1865	0.00465904	0.0107243	75.6785
        0.0107727	0.00182876	0.186546	-3.45472
        0	0	0	1"
       Date="2014.05.19 17:57:00" Error="1.7" />
  </CoordinateDefinitions>
  <vtkUsSimulatorAlgo
    ImageCoordinateFrame="Image"
    ReferenceCoordinateFrame="Phantom"
    IncomingIntensityMwPerCm2="100"
    BrightnessConversionGamma="0.2"
    BrighntessConversionOffset="30"
    NumberOfScanlines="200"
    NumberOfSamplesPerScanline="210"
    NoiseAmplitude="5.0"
    NoiseFrequency="2.5 3.5 1"
    NoisePhase="50 20 0" />
  <ScanConversion
    TransducerName="Ultrasonix_C5-2"
    TransducerGeometry="CURVILINEAR"
    RadiusStartMm="50.0"
    RadiusStopMm="100.0"
    ThetaStartDeg="-24.0"
    ThetaStopDeg="24.0"
    OutputImageSizePixel="820 616"
    TransducerCenterPixel="410 130"
    OutputImageSpacingMmPerPixel="0.1526 0.1526"
    NumberOfScanLines="200"
    NumberOfSamplesPerScanLine="210" />
  <RfProcessing>
    <RfToBrightnessConversion NumberOfHilbertFilterCoeffs="32.0" BrightnessScale="20.0" />
    <ScanConversion
      TransducerName="Ultrasonix_C5-2"
      TransducerGeometry="CURVILINEAR"
      RadiusStartMm="50.0"
      RadiusStopMm="100.0"
      ThetaStartDeg="-24.0"
      ThetaStopDeg="24.0"
      OutputImageSizePixel="820 616"
      TransducerCenterPixel="410 130"
      OutputImageSpacingMmPerPixel="0.1526 0.1526" />
  </RfProcessing>
  <VolumeReconstruction
    OutputSpacing="0.6 0.6 0.6"
    FanAnglesDeg="-24 24"
    FanOriginPixel="410 -300"
    FanRadiusStartPixel="380"
    FanRadiusStopPixel="850"
    Interpolation="LINEAR"
    Optimization="FULL"
    CompoundingMode="MAXIMUM"
    FillHoles="On"
    NumberOfThreads="2">
    <HoleFilling>
      <HoleFillingElement Type="STICK" StickLengthLimit="9" NumberOfSticksToUse="1" />
    </HoleFilling>
  </VolumeReconstruction>
</PlusConfiguration>
